PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 1067]
  color = -1.0000, -1.0000, -1.0000
  expName = Sternberg
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Introduction
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    TextComponent WelcomeText
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Sternberg Memory Trial:
        Please press any key when researcher is ready.
    KeyboardComponent ready
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent var_init
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import string
        text_stim = "error: text not properly updated"
        key_s = "error: key press not properly updated"
        n_val = 0
  Routine instructions
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    TextComponent text_norm
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Welcome to the Experiment!
        This memory based test is known as the Sternberg Task.
        This task is broken into five distinct sections:
    KeyboardComponent key_instruct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('center')
  Routine cross_fix
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    PolygonComponent Cross_Fixation
      fillColor = white
      lineWidth = 0.05
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $cross_time
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  Routine Maintenance
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    ImageComponent image
      color = black
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $maintenance_time
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  Routine Response
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    CodeComponent rt_fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # Provide feedback on the response time of a key response
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"

        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 17 and 18.
        # 2. dedent line 16

        fb_text = 'no key_resp component found - look at the Std out window for info'


        try:
            fb_text = 'RT: ' + str(round(key_resp.rt*1000)/1000) + ' seconds'#multiplying and dividing by 1000 for online compatibility (Math.Round in JS rounds to the nearest integer rather than rounding floats to a decimal place)
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n2. that data is set to store from first or last key')
    TextComponent rt_fb
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_time
      text [set every repeat] = $key_stim
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    CodeComponent key_gen
      Code Type = Auto->JS
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      Begin Experiment:
        key_stim = random.sample(string.ascii_lowercase, 1)
        output_resp = "ERROR: string not updated!\n"

        def sb_validate(string, char_key):
            return char_key in string

        if (sb_validate(key_stim, text_stim)):
            output_resp = "Correct"
        else:
            output_resp = "Incorrect"
    KeyboardComponent key_resp
      allowedKeys = ',','.'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Stimulus_N4
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    CodeComponent text_gen
      Code Type = Auto->JS
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      Begin Routine:
        import random
        import string

        # generate random letter string
        def sb_rand(num_letters = 2):
            if num_letters > 26:
                return "Error: num_letters must be less than or equal to 26"
            else:
                return " ".join(random.sample(string.ascii_lowercase, num_letters))
        n_val = 4
        # supply arg with number of letters
        text_stim = sb_rand(n_val)
    TextComponent letter_display
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimulus_time
      text = $text_stim
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  Routine feedback
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $response_time
      text = $output_resp
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  Routine disp_correct
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = CORRECT
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  Routine disp_incorrect
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = INCORRECT
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  Routine ending
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    TextComponent ending_stim
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        The experiment has concluded.
        Thank you for participating in the study!
        If you have any questions, please direct them
        to the researcher.
Flow
  Routine Introduction
  Routine instructions
  Routine cross_fix
  LoopInitiator new_N loopType="TrialHandler"
    loopType = random
    nReps = $trial_count
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    LoopInitiator loop loopType="TrialHandler"
      loopType = sequential
      nReps = $loop__count
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      Routine Stimulus_N4
      Routine Maintenance
      Routine Response
      Routine feedback
      LoopInitiator dummy_loop_c loopType="TrialHandler"
        loopType = sequential
        nReps = 1
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        Routine disp_correct
      LoopTerminator dummy_loop_c
      LoopInitiator dummy_loop_nc loopType="TrialHandler"
        loopType = sequential
        nReps = 1
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        Routine disp_incorrect
      LoopTerminator dummy_loop_nc
    LoopTerminator loop
  LoopTerminator new_N
  Routine ending
