PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = buttontest
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine response
    RoutineSettingsComponent response
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp
      allowedKeys = 'comma','period'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $key_prompt
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  Routine button_record
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21


        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'
        print(key_resp)
        try:
            if key_resp.corr:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine prompt
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    TextComponent string_prompt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = $string_prompt
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    ImageComponent image
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1
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  Routine intro
    RoutineSettingsComponent intro
      stopVal [duration (s)] = 2
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = prompting stuff
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    KeyboardComponent key_nex
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent init_function
      Code Type = Auto->JS
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      Before Experiment:
        import random
        import string

        # return a character for response stimulus
        def gen_key(string_prompt, correct_rate = 0.5):
            trunc_chars = str.maketrans('', '', string_prompt)
            trunc_string = string.ascii_lowercase.translate(trunc_chars)
            valid_string = string_prompt.replace(" ", "")
            return random.choice(trunc_string) if correct_rate < random.random() else random.choice(valid_string)


        # generate list of characters for encoding, must be stored for checking validity in sb_validate
        def sb_rand(num_letters = 4):
            if num_letters > 26:
                return "Error: num_letters must be less than or equal to 26"
            else:
                return " ".join(random.sample(string.ascii_lowercase, num_letters))

        # supply string_prompt and char_key to check if the key is valid
        def sb_validate(string_prompt, char_key):
            return char_key in string_prompt

        # after supplying sb_rand to the stimulus, run gen_key to generate a key.
        # then run sb_validate to check if the key is valid. If sb_validate returns True,
        # use bool response to display correct/incorrect response.
        def input_val(validation, correct_key = 'period', incorrect_key = 'comma'):
                return correct_key if validation else incorrect_key
    CodeComponent init_gen
      Code Type = Auto->JS
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      Begin Experiment:
        # before each cycle, update each variable
        string_prompt = sb_rand()
        key_prompt = gen_key(string_prompt)
        map_correct = input_val(sb_validate(string_prompt, key_prompt))
        workbook = openpyxl.load_workbook('conditions.xlsx')
        sheet = workbook.active
        sheet['A2'] = map_correct
        workbook.save('conditions.xlsx')
        print("string prompt is", string_prompt, "\n",
              "key prompt is", key_prompt, "\n",
              "button to indicate correct is", map_correct, "\n"
              "workbook has saved value of", sheet['A2'].value, "\n")
Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditions = [{'corrAns': ','}]
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    Routine prompt
    Routine response
    Routine button_record
  LoopTerminator trials
