PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  backgroundFit = fill
  color = -1.0000, -1.0000, -1.0000
  expName = buttontest
  frameRateMsg = initializing screen!
  keyboardBackend = ioHub
  runMode = 0
  rush = True
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Routines
  Routine response
    RoutineSettingsComponent response
      stopVal [duration (s)] = timing_map["dResponse"]
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    KeyboardComponent key_resp
      allowedKeys = 'comma','period'
      correctAns = $stim_map["map_correct"]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent key_response_disp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim_map["key_prompt"]
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  Routine button_record
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'
        timeout_fb ='test will resume after 10 seconds'

        # display feedback to participant
        print(key_resp.keys,"was pressed\n")
        try:
            if key_resp.keys == None:
                fb_text = 'please respond within a shorter time period.'
                timing_map["dFb"] = 10
                fb_col = 'white'
                stim_map["loop_iter"] -= 1
            elif key_resp.corr:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'

        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')


        # increment loop, enable cross if loop reaches max
        stim_map["loop_iter"] += 1
        if stim_map["loop_iter"] == stim_map["loop_count"]:
            stim_map["loop_iter"] = 0
            stim_map["char_length"] += 2
            stim_map["cross_en"] = False
    TextComponent fb_disp
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["dFb"]
      text [set every repeat] = $fb_text
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    ImageComponent image_2
      color = -1.0000, -1.0000, -1.0000
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["dFb"]
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    TextComponent timeout_text
      letterHeight = 0.05
      pos = (0, -1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $timing_map["dFb"]
      text = $timeout_fb
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  Routine prompt
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    TextComponent string_prompt_disp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["dPrompt"]
      text [set every repeat] = $stim_map["string_prompt"]
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    ImageComponent image
      color = -1.0000, -1.0000, -1.0000
      size = (0.5, 0.5)
      startVal [time (s)] = timing_map["dPrompt"]
      stopVal [duration (s)] = timing_map["dBlank"]
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  Routine intro
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    TextComponent intro_disp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Hello! Thank you for participating in the Sternberg Trial Test.
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    KeyboardComponent key_nex
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent init_function
      Code Type = Auto->JS
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      Before Experiment:
        import random
        import string
        import socket

        # timing of each stimulus (global variables)
        timing_map = {"dCross": 2,
                      "dBlank": 1,
                      "dPrompt": 1,
                      "dResponse": 1,
                      "dButton": 1,
                      "dFb": 1}

        # stimulus text, feedback, and loop count
        stim_map = {"loop_iter": 0,
                        "loop_count": 3,
                        "loop_maxcount": 9,
                        "char_length": 3,
                        "string_prompt": "",
                        "key_prompt": "",
                        "map_correct": None,
                        "cross_en": False,
                        }

        # initialize udp connection to MATLAB
        UDP_IP = "127.0.0.1"
        UDP_PORT = 8000
        sock = socket.socket(socket.AF_INET, socket.SOCK_DGRAM)


        # return a character for response stimulus
        def gen_key(string_prompt, correct_rate = 0.5):
            trunc_chars = str.maketrans('', '', string_prompt)
            trunc_string = string.ascii_lowercase.translate(trunc_chars)
            valid_string = string_prompt.replace(" ", "")
            return random.choice(trunc_string) if correct_rate < random.random() else random.choice(valid_string)


        # generate list of characters for encoding, must be stored for checking validity in sb_validate
        def sb_rand(num_letters = 4):
            if num_letters > 26:
                return "Error: num_letters must be less than or equal to 26"
            else:
                return " ".join(random.sample(string.ascii_lowercase, num_letters))

        # supply string_prompt and char_key to check if the key is valid
        def sb_validate(string_prompt, char_key):
            return char_key in string_prompt

        # after supplying sb_rand to the stimulus, run gen_key to generate a key.
        # then run sb_validate to check if the key is valid. If sb_validate returns True,
        # use bool response to display correct/incorrect response.
        def input_val(validation, correct_key = 'period', incorrect_key = 'comma'):
                return correct_key if validation else incorrect_key

        #
      Begin Experiment:
        # before each cycle, update each variable
        # string_prompt: stimulus display
        # key_prompt: key selected to display
        # map_correct: button press validation
        # loop_iter: used to keep track of loops
        # loop_count: set max loop count
        # cross_en: keep track of fixation period
  Routine cross_fix
    RoutineSettingsComponent cross_fix
      skipIf = stim_map["cross_en"]
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["dCross"]
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    CodeComponent readjust_cross_en
      Code Type = Auto->JS
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      End Routine:
        # set in routine to skip if cross_en == True
        stim_map["cross_en"] = True
  Routine initcodevalues
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    CodeComponent loopvalue
      Code Type = Auto->JS
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      Begin Routine:
        # initialize values in map
        stim_map["string_prompt"] = sb_rand(stim_map["char_length"])
        stim_map["key_prompt"] = gen_key(stim_map["string_prompt"])
        stim_map["map_correct"] = input_val(sb_validate(stim_map["string_prompt"],
                                              stim_map["key_prompt"]))


        print("string prompt is", stim_map["string_prompt"], "\n",
              "key prompt is", stim_map["key_prompt"], "\n",
              "button to indicate correct is", stim_map["map_correct"], "\n")
Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditions = [{'dCross': 1, 'dBlank': 1, 'dPrompt': 1, 'dResponse': 1, 'dButton': 1, 'dFb': 1}]
    isTrials = False
    loopType = random
    nReps = stim_map["loop_maxcount"]
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    Routine initcodevalues
    Routine cross_fix
    Routine prompt
    Routine response
    Routine button_record
  LoopTerminator trials
