PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (str(expInfo['birthday']), expName, expInfo['date'])
  Experiment info = {'birthday': 'MM-DD-YYYY'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Use version = 2024.2.4
  Window size (pixels) = [1707, 1067]
  backgroundFit = fill
  colPriority = {'thisRow.t': 'priority.CRITICAL', 'expName': 'priority.LOW', '': ''}
  color = -1.0000, -1.0000, -1.0000
  expName = maintrial_sternberg
  frameRateMsg = initializing screen!
  keyboardBackend = ioHub
  runMode = 0
  rush = True
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Routines
  Routine response
    RoutineSettingsComponent response
      stopVal [duration (s)] = timing_map["dResponse"]
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    TextComponent key_response_disp
      color = -1.0000, 1.0000, 1.0000
      font =  Noto Mono
      letterHeight = 0.18
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim_map["key_prompt"]
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    CodeComponent code_matlab_r
      Code Type = Auto->JS
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      Begin Routine:
        matlab_send("r")
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine button_record
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    CodeComponent code_fb
      Code Type = Auto->JS
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      Before Experiment:
        block_fb = ""
        fb_text = ""
        text_break = ""
        skip_break = True
      Begin Routine:
        global block_fb
        global fb_text
        global text_break
        global skip_break

        mouse_rawval = mouse.getPressed()
        mouse_correct = int(mouse_rawval == stim_map["map_correct"])
        try:
            if  mouse_rawval == mouse_map["none"]:
                # add timeout text, decrement loop, enable fixation
                fb_text = 'Response took too long. Press middle mouse button to continue.'
                timing_map["dFb"] = TIMEOUT_DURATION
                stim_map["loop_iter"] -= 1
                stim_map["cross_en"] = False
                matlab_send("timeout")
            elif mouse_correct:
                timing_map["dFb"] = 0
                block_fb += u'\u2713 '
            else:
                timing_map["dFb"] = 0
                block_fb += u'\u2715 '
        except:
            print('ERROR: no mouse keyboard component written.')


        # increment loop, enable cross if loop reaches max
        stim_map["loop_iter"] += 1

        # display loop information
        print("loop_iter =", stim_map["loop_iter"], '\n',
              "loop_count =", stim_map["loop_count"], '\n')

        # increment characters after specified loop count
        if stim_map["loop_iter"] == stim_map["loop_count"]:
            # display countdown unless end of experiment
            skip_break = (stim_map["char_length"] == MAX_CHARACTERS)
            # adjust variables for looping scheduler
            stim_map["loop_iter"] = 0
            stim_map["char_length"] += CHARACTER_INCREMENT
            # reenable fixation
            stim_map["cross_en"] = False
            timing_map["dFb"] = DEFAULT_FEEDBACK
            # display text during break
            fb_text = 'feedback:\n' + block_fb[:int(len(block_fb)/2)] + '\n' + block_fb[int(len(block_fb)/2):]
            text_break = "relax: test will resume in 20 seconds." if not skip_break else "the experiment has finished."

            # send signal to MATLAB showing it is a fb, ignore
            matlab_send("fb")
      Each Frame:
        if mouse_fb.getPressed() == mouse_map["middle"]:
            continueRoutine = False
            break
      End Routine:
        # ensure that fb is reset to 0
        timing_map["dFb"] = 0
        fb_text_size = 0.16
        if len(block_fb) >= (stim_map["loop_count"] * 2):
            block_fb = ""
            text_break = ""
        # print out debugging information
        print("timing information is: \n")
        print("timing_map[\"dCross\"]:", timing_map["dCross"])
        print("timing_map[\"dBlank\"]:", timing_map["dBlank"])
        print("timing_map[\"dPrompt\"]:", timing_map["dPrompt"])
        print("timing_map[\"dResponse\"]:", timing_map["dResponse"])
        print("timing_map[\"dFb\"]:", timing_map["dFb"])
        print("timing_map[\"dITI\"]:", timing_map["dITI"])

        print(mouse_rawval, "was pressed")
        print("current loop that ended is:", currentLoop.thisTrial)

        # log reaction time and accuracy percentage
        try:
            thisExp.addData('reactionTime', mouse.time[-1])
        except:
            thisExp.addData('reactionTime', "timed out")
        thisExp.addData('accuracy', "correct" if mouse_correct else "incorrect")
        thisExp.addData('prompt', stim_map["string_prompt"])
        thisExp.addData('character', stim_map["key_prompt"])

        # rewind trial to overwrite timeout data
        if mouse_rawval == mouse_map["none"]:
            currentLoop.rewindTrials()
        else:
            RT_list.append(mouse.time[-1])
            ACC_list.append(mouse_correct)
    TextComponent fb_disp
      color [set every repeat] = 1.0000, 1.0000, 1.0000
      font =  Noto Mono
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["dFb"]
      text [set every repeat] = $fb_text
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    TextComponent fb_break
      letterHeight = 0.10
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["dFb"]
      text [set every repeat] = $text_break
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    MouseComponent mouse_fb
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["dFb"]
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  Routine prompt
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    TextComponent string_prompt_disp
      font =  Noto Mono
      letterHeight = 0.17
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["dPrompt"]
      text [set every repeat] = $stim_map["string_prompt"]
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    CodeComponent code_matlab_e
      Code Type = Auto->JS
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      Begin Routine:
        matlab_send("e")
  Routine intro
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    TextComponent intro_disp
      font =  Noto Mono
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $intro_disp_text
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    CodeComponent code_initfunction
      Code Type = Auto->JS
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      Before Experiment:
        import random
        import string
        import socket

        # constants declaration
        TIMEOUT_DURATION = 10
        CHARACTER_INCREMENT = 2
        DEFAULT_FEEDBACK = 10
        MAX_CHARACTERS = 7
        # dBlank [3, 5] -- dITI [1.5, 3.5]
        dBlank_lowbound = 3
        dBlank_upbound = 5
        dITI_lowbound = 1.5
        dITI_upbound = 3.5

        # record stats to give to participant upon finishing
        average_rt = 0
        average_accuracy = 0

        # timing of each stimulus (global variables)
        """
        dCross: duration of cross stimulus -- default 10
        dPrompt: duration of characters on screen -- default 3.5
        dBlank: duration of blank screen after cross -- default 4
        dResponse: duration of single character on screen (timeout) -- default 1.5
        dFb: duration of feedback (correct/incorrect) -- default 0.5
        dITI: duration of blank screen -- default 2.5
        """
        timing_map = {"dCross": 10,
                      "dPrompt": 3.5,
                      "dBlank": 4,
                      "dResponse": 3,
                      "dFb": TIMEOUT_DURATION,
                      "dITI": 2.5,
                      # start at high values of practice,
                      # will change after 1st runtime
                      "p_dCross": 5,
                      "p_dBlank": 2,
                      "p_dPrompt": 4,
                      "p_dResponse": 1,
                      "p_dFb": 2
                      }

        mouse_map = {"left":  [1, 0, 0],
                     "right": [0, 0, 1],
                     "middle": [0, 1, 0],
                     "none": [0, 0, 0]}

        # stimulus text, feedback, and loop count
        # before each cycle, update each variable
        # string_prompt: stimulus display
        # key_prompt: key selected to display
        # map_correct: button press validation
        # loop_iter: used to keep track of loops
        # loop_count: set max loop count
        # cross_en: keep track of fixation period

        stim_map = {"loop_iter": 0,
                        "loop_count": 10,
                        "loop_maxcount": 30,
                        "char_length": 3,
                        "string_prompt": "",
                        "key_prompt": "",
                        "map_correct": None,
                        "cross_en": False,
                        "instruction_text": "",
                        "iter_text_list": 0,
                        }



        # initialize udp connection to MATLAB
        UDP_IP = "10.68.17.253"
        UDP_PORT = 8000
        sock = socket.socket(socket.AF_INET, socket.SOCK_DGRAM)

        # UDP int values, sent to MATLAB
        udp_map = {"f": bytes([1]),
                   "e": bytes([2]),
                   "m": bytes([4]),
                   "r": bytes([8]),
                   "fb": bytes([13]),
                   "start": bytes([21]),
                   "end": bytes([31]),
                   "ITI": bytes([45]),
                   "NA": bytes([66]),
                   "timeout": bytes([81])}

        # send value to UDP Port, mapped via udp_map
        def matlab_send(stage):
            if stage in udp_map:
                sock.sendto(udp_map[stage], (UDP_IP, UDP_PORT))


        # return a character for response stimulus
        def gen_key(string_prompt, correct_rate = 0.5):
            consonants = "bcdfghjklmnpqrstvwxyz"
            trunc_chars = str.maketrans('', '', string_prompt)
            trunc_string = consonants.translate(trunc_chars)
            valid_string = string_prompt.replace(" ", "")
            return random.choice(trunc_string) if correct_rate < random.random() else random.choice(valid_string)


        # generate list of characters for encoding, must be stored for checking validity in sb_validate
        def sb_rand(num_letters = 4):
            consonants = "bcdfghjklmnpqrstvwxyz"
            if num_letters > 26:
                return "Error: num_letters must be less than or equal to 26"
            else:
                return " ".join(random.sample(consonants, num_letters))

        # supply string_prompt and char_key to check if the key is valid
        def sb_validate(string_prompt, char_key):
            return char_key in string_prompt

        # after supplying sb_rand to the stimulus, run gen_key to generate a key.
        # then run sb_validate to check if the key is valid. If sb_validate returns True,
        # use bool response to display correct/incorrect response.
        def input_val(validation, correct_key = [1, 0, 0], incorrect_key = [0, 0, 1]):
                return correct_key if validation else incorrect_key


        # make sure all text boxes are initialized!
        intro_disp_text = "Hello! Thank you for participating in the Sternberg Working Memory Task."
        intro_small_text = "Please wait for the experimenter to continue."
        maintrial_text = "The main experiment will now begin. Please press any key to begin."
      Begin Routine:
        # send UDP signal indicating start to synchronize
        # stimulus with MATLAB EEG signals
        matlab_send("start")
      Each Frame:
        if mouse_intro.getPressed() == mouse_map["middle"]:
            continueRoutine = False
            break
    TextComponent intro_small
      font =  Noto Mono
      letterHeight = 0.05
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $intro_small_text
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    MouseComponent mouse_intro
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine cross_fix
    RoutineSettingsComponent cross_fix
      skipIf = stim_map["cross_en"]
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    CodeComponent code_crossen
      Code Type = Auto->JS
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      Begin Routine:
        if not stim_map["cross_en"]:
            matlab_send("f")
      End Routine:
        # set in routine to skip if cross_en == True
        stim_map["cross_en"] = True
    TextComponent text_cross
      letterHeight = 0.30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["dCross"]
      text = +
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  Routine initcodevalues
    RoutineSettingsComponent initcodevalues
      saveStartStop = False
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    CodeComponent code_loopvalue
      Code Type = Auto->JS
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      Begin Routine:
        # reset prompt and key values
        stim_map["string_prompt"] = sb_rand(stim_map["char_length"])
        stim_map["key_prompt"] = gen_key(stim_map["string_prompt"])
        stim_map["map_correct"] = input_val(sb_validate(stim_map["string_prompt"],
                                              stim_map["key_prompt"]))
        # initialize running average of RT and ACC
        if currentLoop.thisN == 0:
            RT_list = []
            ACC_list = []

        # jitter values for blank and ITI
        timing_map["dBlank"] = random.uniform(dBlank_lowbound, dBlank_upbound)
        timing_map["dITI"] = random.uniform(dITI_lowbound, dITI_upbound)

        # display prompt to terminal for debugging

        print("string prompt is", stim_map["string_prompt"], "\n",
              "key prompt is", stim_map["key_prompt"], "\n",
              "button to indicate correct is", stim_map["map_correct"], "\n")
  Routine instruction_page
    RoutineSettingsComponent instruction_page
      saveStartStop = False
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    TextComponent instruction
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim_map["instruction_text"]
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    CodeComponent code_textshift
      Code Type = Auto->JS
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      End Routine:
        # go to next text

        stim_map["iter_text_list"] += 1
        if stim_map["iter_text_list"] != loopcount_text_list:
            print("now on text", stim_map["iter_text_list"], "\n")
            stim_map["instruction_text"] = text_list[stim_map["iter_text_list"]]
    KeyboardComponent key_resp_instruction
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine p_cross_fix
    RoutineSettingsComponent p_cross_fix
      saveStartStop = False
      skipIf = stim_map["cross_en"]
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    PolygonComponent cross
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["p_dCross"]
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    CodeComponent p_code_crossen
      Code Type = Auto->JS
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      End Routine:
        # set in routine to skip if cross_en == True
        stim_map["cross_en"] = True
        timing_map["p_dCross"]
    TextComponent p_cross_text_block
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["p_dCross"]
      text [set every repeat] = $p_cross_text
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  Routine p_prompt
    RoutineSettingsComponent p_prompt
      saveStartStop = False
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    TextComponent p_string_prompt_disp
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["p_dPrompt"]
      text [set every repeat] = $stim_map["string_prompt"]
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    ImageComponent p_black_screendelay
      color = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = timing_map["p_dPrompt"]
      stopVal [duration (s)] = timing_map["p_dBlank"]
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    TextComponent p_string_prompt_text_block
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["p_dPrompt"]
      text [set every repeat] = $p_string_prompt_text
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  Routine p_response
    RoutineSettingsComponent p_response
      saveStartStop = False
      stopVal [duration (s)] = timing_map["p_dResponse"]
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    KeyboardComponent p_key_resp
      allowedKeys = 'comma','period'
      correctAns = $stim_map["map_correct"]
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent p_key_response_disp
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim_map["key_prompt"]
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  Routine p_button_record
    RoutineSettingsComponent p_button_record
      saveStartStop = False
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    CodeComponent p_code_fb
      Code Type = Auto->JS
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      Begin Routine:
        # display feedback to log
        print(p_key_resp.keys,"was pressed\n")


        p_timing_shift_text = ""

        try:
            if p_key_resp.keys == None:
                # add timeout text, decrement loop, enable fixation
                fb_text = 'please respond within a shorter time period.\nPress any key to continue.'
                fb_col = 'white'
                # add duration for user to pause/orient
                timing_map["p_dFb"] = TIMEOUT_DURATION
                # adjust loop values
                stim_map["loop_iter"] -= 1
                # reenable cross
                stim_map["cross_en"] = False
            elif p_key_resp.corr:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')


        # increment loop, enable cross if loop reaches max
        stim_map["loop_iter"] += 1
        if ((stim_map["char_length"] == 3) and (stim_map["loop_iter"] == 2)):
            p_timing_shift_text = "the stimulus will now speed up"
      End Routine:
        # print after displaying things
        # display loop information
        print("loop_iter =", stim_map["loop_iter"], '\n',
              "p_loop_count =", stim_map["p_loop_count"], '\n')

        # ensure that fb is reset to 1, clear prompting text
        timing_map["p_dFb"] = DEFAULT_FEEDBACK
        p_cross_text = ""
        p_string_prompt_text = ""
        # set different timings after
        if ((stim_map["char_length"] == 3) and (stim_map["loop_iter"] == 2)):
            timing_map["p_dCross"] = 5
            timing_map["p_dBlank"] = 2
            timing_map["p_dPrompt"] = 1
            timing_map["p_dResponse"] = 1
            timing_map["p_dFb"] = 3

        # increment characters after specified loop count
        if stim_map["loop_iter"] == stim_map["p_loop_count"]:
            stim_map["loop_iter"] = 0
            stim_map["char_length"] += CHARACTER_INCREMENT
            stim_map["cross_en"] = False

        # print out trial information for debugging
        print("timing information is: \n")
        print("timing_map[\"p_dCross\"]:", timing_map["p_dCross"])
        print("timing_map[\"p_dBlank\"]:", timing_map["p_dBlank"])
        print("timing_map[\"p_dPrompt\"]:", timing_map["p_dPrompt"])
        print("timing_map[\"p_dResponse\"]:", timing_map["p_dResponse"])
        print("timing_map[\"p_dFb\"]:", timing_map["p_dFb"])
        print("current loop that ended is:", currentLoop.thisTrial)

        # rewind trial to overwrite timeout data
        if p_key_resp.keys == None:
            currentLoop.rewindTrials()
    TextComponent p_fb_disp
      color [set every repeat] = $fb_col
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["p_dFb"]
      text [set every repeat] = $fb_text
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    TextComponent p_timing_shift_text_block
      letterHeight = 0.1
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["p_dFb"]
      text [set every repeat] = $p_timing_shift_text
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    KeyboardComponent p_fb_keyboard_continue
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["p_dFb"]
      store = nothing
      syncScreenRefresh = False
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  Routine instruction_maintrial
    RoutineSettingsComponent instruction_maintrial
      saveStartStop = False
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $maintrial_text
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    KeyboardComponent continue_maintrial
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent code_clear_p
      Code Type = Auto->JS
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      Begin Routine:
        # reset values after practice
        stim_map["loop_iter"] = 0
        stim_map["char_length"] = 3
  Routine countdown
    RoutineSettingsComponent countdown
      skipIf = skip_break
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    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $str(10-int(t))
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        skip_break = True
  Routine p_code_init
    RoutineSettingsComponent p_code_init
      saveStartStop = False
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    CodeComponent p_codeinit
      Code Type = Auto->JS
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      Begin Routine:
        # initialize values in map
        stim_map["string_prompt"] = sb_rand(stim_map["char_length"])
        stim_map["key_prompt"] = gen_key(stim_map["string_prompt"])
        stim_map["map_correct"] = input_val(sb_validate(stim_map["string_prompt"],
                                              stim_map["key_prompt"]))
        if stim_map["char_length"] == 3:
            p_cross_text = "focus on the cross"
            p_string_prompt_text = "memorize these characters"
        else:
            p_cross_text = ""
            p_string_prompt_text = ""

        print("string prompt is", stim_map["string_prompt"], "\n",
              "key prompt is", stim_map["key_prompt"], "\n",
              "button to indicate correct is", stim_map["map_correct"], "\n")
  Routine blank
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    ImageComponent blank_screen
      color = -1.0000, -1.0000, -1.0000
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["dBlank"]
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    CodeComponent code_matlab_m
      Code Type = Auto->JS
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      Begin Routine:
        matlab_send("m")
  Routine end
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    TextComponent end_text_block
      color = 1.0000, 1.0000, 1.0000
      font =  Noto Mono
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      text [set every repeat] = $end_text
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    MouseComponent mouse_end
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine calc_end_stat
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    CodeComponent code_end_block
      Code Type = Auto->JS
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      Begin Experiment:
        end_text = ""
      Begin Routine:
        # demarcate MATLAB ending
        matlab_send("end")

        # calculate running response time and accuracy
        rt_arr = np.array(RT_list)
        acc_arr = np.array(ACC_list)
        disp_rt = int(rt_arr.mean() * 1000)
        disp_accuracy = int(acc_arr.mean() * 100)

        end_text = "Thank you for your time! You had an average reaction time of " + str(disp_rt) + " ms and an accuracy of " + str(disp_accuracy) + "%."
  Routine ITI
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    CodeComponent code_ITI
      Code Type = Auto->JS
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      Begin Routine:
        print("value is", mouse.getPressed())
        if (mouse.getPressed() != mouse_map["none"]) and (mouse.getPressed() != mouse_map["middle"]):
            matlab_send("ITI")
    PolygonComponent black_screen
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5,0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["dITI"]
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Flow
  Routine intro
  LoopInitiator loop_maintrial loopType="TrialHandler"
    conditions = [{'dCross': 1, 'dBlank': 1, 'dPrompt': 1, 'dResponse': 1, 'dButton': 1, 'dFb': 1}]
    loopType = sequential
    nReps = stim_map["loop_maxcount"]
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    Routine initcodevalues
    Routine cross_fix
    Routine prompt
    Routine blank
    Routine response
    Routine button_record
    Routine countdown
    Routine ITI
  LoopTerminator loop_maintrial
  Routine calc_end_stat
  Routine end
