PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Use version = 2024.2.4
  Window size (pixels) = [1707, 1067]
  backgroundFit = fill
  color = -1.0000, -1.0000, -1.0000
  expName = EEGSternberg
  frameRateMsg = initializing screen!
  keyboardBackend = ioHub
  runMode = 0
  rush = True
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Routines
  Routine response
    RoutineSettingsComponent response
      stopVal [duration (s)] = timing_map["dResponse"]
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    TextComponent key_response_disp
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim_map["key_prompt"]
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine button_record
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    CodeComponent code_fb
      Code Type = Auto->JS
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      Begin Routine:
        # display feedback to log
        print(mouse.getPressed(),"was pressed\n")


        try:
            if mouse.getPressed() == mouse_map["none"]:
                # add timeout text, decrement loop, enable fixation
                fb_text = 'please respond within a shorter time period.\nPress any key to continue.'
                timing_map["dFb"] = TIMEOUT_DURATION
                fb_col = 'white'
                stim_map["loop_iter"] -= 1
                stim_map["cross_en"] = False
            elif mouse.getPressed() == stim_map["map_correct"]:
                fb_text = 'Correct!' + "w/ rt of "+ str(mouse.time[-1])
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'

        except Exception as e:
            print(e)


        # increment loop, enable cross if loop reaches max
        stim_map["loop_iter"] += 1
        if stim_map["loop_iter"] == stim_map["loop_count"]:
            stim_map["loop_iter"] = 0
            stim_map["char_length"] += CHARACTER_INCREMENT
            stim_map["cross_en"] = False
      Each Frame:
        if mouse_fb.getPressed() == mouse_map["middle"]:
            continueRoutine = False
            break
      End Routine:
        # ensure that fb is reset to 1
        timing_map["dFb"] = DEFAULT_FEEDBACK
    TextComponent fb_disp
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["dFb"]
      text [set every repeat] = $fb_text
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    ImageComponent image_2
      color = -1.0000, -1.0000, -1.0000
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["dFb"]
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    MouseComponent mouse_fb
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["dFb"]
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  Routine prompt
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    TextComponent string_prompt_disp
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["dPrompt"]
      text [set every repeat] = $stim_map["string_prompt"]
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    ImageComponent black_screendelay
      color = -1.0000, -1.0000, -1.0000
      size = (0.5, 0.5)
      startVal [time (s)] = timing_map["dPrompt"]
      stopVal [duration (s)] = timing_map["dBlank"]
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  Routine intro
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    TextComponent intro_disp
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      text [set every repeat] = $intro_disp_text
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    CodeComponent code_initfunction
      Code Type = Auto->JS
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      Before Experiment:
        import random
        import string
        import socket

        # constants declaration
        TIMEOUT_DURATION = 10
        CHARACTER_INCREMENT = 2
        DEFAULT_FEEDBACK = 1

        # timing of each stimulus (global variables)
        timing_map = {"dCross": 2,
                      "dBlank": 1,
                      "dPrompt": 1,
                      "dResponse": 1,
                      "dButton": 1,
                      "dFb": 1}
        intro_disp_text = "testing environment"
        intro_small_text = "mouse exp"
        # stimulus text, feedback, and loop count
        # before each cycle, update each variable
        # string_prompt: stimulus display
        # key_prompt: key selected to display
        # map_correct: button press validation
        # loop_iter: used to keep track of loops
        # loop_count: set max loop count
        # cross_en: keep track of fixation period

        stim_map = {"loop_iter": 0,
                        "loop_count": 3,
                        "loop_maxcount": 9,
                        "char_length": 3,
                        "string_prompt": "",
                        "key_prompt": "",
                        "map_correct": None,
                        "cross_en": False,
                        "instruction_text": "",
                        "iter_text_list": 0
                        }

        mouse_map = {"left":  [1, 0, 0],
                     "right": [0, 0, 1],
                     "middle": [0, 1, 0],
                     "none": [0, 0, 0]}
        '''
        # initialize udp connection to MATLAB
        UDP_IP = "127.0.0.1"
        UDP_PORT = 8000
        sock = socket.socket(socket.AF_INET, socket.SOCK_DGRAM)

        # UDP int values, sent to MATLAB
        udp_map = {"fixation": bytes([1]),
                   "encoding": bytes([2]),
                   "maintenance": bytes([3]),
                   "retrieval": bytes([4])}

        # send value to UDP Port, mapped via udp_map
        def matlab_send(stage):
            if stage in udp_map:
                sock.sendto(udp_map[stage], (UDP_IP, UDP_PORT))
            else:
                sock.sendto(bytes([99]), (UDP_IP, UDP_PORT))
        '''

        # return a character for response stimulus
        def gen_key(string_prompt, correct_rate = 0.5):
            trunc_chars = str.maketrans('', '', string_prompt)
            trunc_string = string.ascii_lowercase.translate(trunc_chars)
            valid_string = string_prompt.replace(" ", "")
            return random.choice(trunc_string) if correct_rate < random.random() else random.choice(valid_string)


        # generate list of characters for encoding, must be stored for checking validity in sb_validate
        def sb_rand(num_letters = 4):
            if num_letters > 26:
                return "Error: num_letters must be less than or equal to 26"
            else:
                return " ".join(random.sample(string.ascii_lowercase, num_letters))

        # supply string_prompt and char_key to check if the key is valid
        def sb_validate(string_prompt, char_key):
            return char_key in string_prompt

        # after supplying sb_rand to the stimulus, run gen_key to generate a key.
        # then run sb_validate to check if the key is valid. If sb_validate returns True,
        # use bool response to display correct/incorrect response.
        def input_val(validation, correct_key = [1, 0, 0], incorrect_key = [0, 0, 1]):
                return correct_key if validation else incorrect_key
      Each Frame:
        # continue on middle mouse press
        if mouse_intro.getPressed() == mouse_map["middle"]:
            continueRoutine = False
            break
    TextComponent intro_small
      letterHeight = 0.05
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $intro_small_text
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    MouseComponent mouse_intro
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine cross_fix
    RoutineSettingsComponent cross_fix
      skipIf = stim_map["cross_en"]
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["dCross"]
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    CodeComponent code_crossen
      Code Type = Auto->JS
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      End Routine:
        # set in routine to skip if cross_en == True
        stim_map["cross_en"] = True
  Routine initcodevalues
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    CodeComponent code_loopvalue
      Code Type = Auto->JS
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      Begin Routine:
        # initialize values in map
        stim_map["string_prompt"] = sb_rand(stim_map["char_length"])
        stim_map["key_prompt"] = gen_key(stim_map["string_prompt"])
        stim_map["map_correct"] = input_val(sb_validate(stim_map["string_prompt"],
                                              stim_map["key_prompt"]))


        print("string prompt is", stim_map["string_prompt"], "\n",
              "key prompt is", stim_map["key_prompt"], "\n",
              "button to indicate correct is", stim_map["map_correct"], "\n")
  Routine test
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    PolygonComponent fixation_4afc
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent top_left_img
      image [set during: images_2afc.ISI_load_images] = default.png
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.5
      units = height
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    StaticComponent ISI_load_images_2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent top_right_img
      image [set during: images_2afc.ISI_load_images] = default.png
      pos = (0.3, 0.25)
      startVal [time (s)] = 0.5
      units = height
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    ImageComponent bott_left_img
      image [set during: images_2afc.ISI_load_images] = default.png
      pos = (-0.3, -0.25)
      startVal [time (s)] = 0.5
      units = height
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    ImageComponent bott_right_img
      image = default.png
      pos = (0.3, -0.25)
      startVal [time (s)] = 0.5
      units = height
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    MouseComponent mouse_4afc
      clickable = left_img, right_img
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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  Routine routine_1
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Any text

        including line breaks

        This text component is white, so change the colour if you have a white background. It does not save the onset and offset time, but has been left justified with a wrap width of 1.8 norm units.

        Press the spacebar to continue
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine instruction_page
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    TextComponent instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim_map["instruction_text"]
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    CodeComponent code_textshift
      Code Type = Auto->JS
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      End Routine:
        # go to next text
        stim_map["iter_text_list"] += 1
        print("now on text", stim_map["iter_text_list"], "\n")
        stim_map["instruction_text"] = text_list[stim_map["iter_text_list"]]
    KeyboardComponent key_resp_instruction
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine
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    CodeComponent rt_fb_code2
      Code Type = Auto->JS
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      Begin Routine:
        # Provide feedback on the response time of a mouse/touch response
        # This routine will need to follow another routine with a
        # mouse response component in it called "mouse"

        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a mouse component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 17 and 18.
        # 2. dedent line 16

        fb_text = 'no mouse component found - look at the Std out window for info'


        try:
            fb_text = 'RT: ' + str(round(mouse.time[-1]*1000)/1000) + ' seconds'#multiplying and dividing by 1000 for online compatibility (Math.Round in JS rounds to the nearest integer rather than rounding floats to a decimal place)
        except:
            print('Make sure that you have:\n1. a routine with a mouse component in it called "mouse"\n2. that data is set to store "on click"')
    TextComponent rt_fb2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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Flow
  Routine intro
  LoopInitiator loop_maintrial loopType="TrialHandler"
    conditions = [{'dCross': 1, 'dBlank': 1, 'dPrompt': 1, 'dResponse': 1, 'dButton': 1, 'dFb': 1}]
    isTrials = False
    loopType = random
    nReps = stim_map["loop_maxcount"]
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    Routine initcodevalues
    Routine cross_fix
    Routine prompt
    Routine response
    Routine button_record
  LoopTerminator loop_maintrial
