PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = click_test
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    MouseComponent mouse
      correctAns = clicked_button
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine routine_1
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    CodeComponent fb_code2
      Code Type = Auto->JS
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      Begin Routine:
        # Check if a mouse click was correct or not.
        # This routine will need to follow another routine with a
        # mouse component in it called "mouse" and several clickable components
        # you will also need a column in your conditions file indicating the name
        # of the correct component to click.
        # If your experiment is missing these you will see an error message.

        # If a mouse component has been added (with a correct answer column) and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no mouse component found or no corrClick column- look at the Std out window for info'
        fb_col = 'black'

        print(dir(mouse))
        try:
            if mouse.getPressed() == [1, 0, 0]:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a mouse component in it called "mouse"\n 2. In the mouse component in the "data" tab select store data "on click".\n 3. In the conditions file have a column called "corrClicked" (where corrClicked is the name of the component to be clicked')
    TextComponent fb2
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fb_text
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  Routine prealloc
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # PsychoPy maps mouse responses to [1,0,0] as left and
        # [0,0,1] as right.

        # if key_gen returns 'right'

        clicked_button = [1, 0, 0]
  Routine routine
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    CodeComponent fb_code2_2
      Code Type = Auto->JS
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      Begin Routine:
        # Check if a mouse click was correct or not.
        # This routine will need to follow another routine with a
        # mouse component in it called "mouse" and several clickable components
        # you will also need a column in your conditions file indicating the name
        # of the correct component to click.
        # If your experiment is missing these you will see an error message.

        # If a mouse component has been added (with a correct answer column) and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no mouse component found or no corrClick column- look at the Std out window for info'
        fb_col = 'black'

        try:
            if mouse.clicked_name[-1] == corrClick:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a mouse component in it called "mouse"\n 2. In the mouse component in the "data" tab select store data "on click".\n 3. In the conditions file have a column called "corrClicked" (where corrClicked is the name of the component to be clicked')
    TextComponent fb2_2
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fb_text
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine prealloc
    Routine trial
    Routine routine_1
    Routine routine
  LoopTerminator trials
