PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = screensize
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.18
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = a b c d e f g
      units = height
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  Routine ff
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    TextComponent text_2
      letterHeight = 0.16
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $display_text
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        text_show = ""
        display_text = ""
      Begin Experiment:
        global text_show
        global display_text
        for a in range(10):
            if (a % 2):
                text_show += (u'\u2713 ')
            else:
                text_show += ('X ')

        display_text = text_show[:int(len(text_show)/2)] + '\n' + text_show[int(len(text_show)/2):]

        global block_fb
        global fb_text

        # display feedback to log
        print(key_resp.keys,"was pressed\n")

        try:
            if key_resp.keys == None:
                # add timeout text, decrement loop, enable fixation
                fb_text = 'please respond within a shorter time period.\nPress any key to continue.'
                timing_map["dFb"] = TIMEOUT_DURATION
                stim_map["loop_iter"] -= 1
                stim_map["cross_en"] = False
            elif key_resp.corr:
                timing_map["dFb"] = 0
                block_fb += u'\u2713 '
            else:
                timing_map["dFb"] = 0
                block_fb += 'X '
        except:
            print('ERROR: no key_resp keyboard component written.')


        # increment loop, enable cross if loop reaches max
        stim_map["loop_iter"] += 1

        # display loop information
        print("loop_iter =", stim_map["loop_iter"], '\n',
              "loop_count =", stim_map["loop_count"], '\n')

        # increment characters after specified loop count
        if stim_map["loop_iter"] == stim_map["loop_count"]:
            stim_map["loop_iter"] = 0
            stim_map["char_length"] += CHARACTER_INCREMENT
            # reenable fixation
            stim_map["cross_en"] = False
            timing_map["dFb"] = DEFAULT_FEEDBACK
            # display text
            print("length of block_fb is ", len(block_fb))
            fb_text = block_fb[:int(len(block_fb)/2)] + '\n' + block_fb[int(len(block_fb)/2):]
            print("fb text is ", fb_text)
            # send signal to MATLAB showing it is a fb, ignore
            matlab_send("fb")
        else:
            matlab_send("NA")
Flow
  Routine trial
  Routine ff
