PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = screensize
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = a b c d e f g
      units = height
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  Routine ff
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    TextComponent text_2
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $text_show
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        text_show = ""
      Begin Experiment:
        global text_show
        for a in range(5):
            text_show += (u'\u2713 ' + "X ")
Flow
  Routine trial
  Routine ff
